PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = $[1.000,1.000,1.000]
  Experiment info = {u'stimorder': u'1', u'session': u'001', u'participant': u'', u'manigroup': u'H'}
  Units = height
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  expName = Financial Problems Task
  Screen = 1
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Routines
  Routine FinanceProblem
    TextComponent text_4
      color = black
      text [set every repeat] = $'%s\n\nPress space when you are done reading' % problemtext
      stopVal [condition] = event.getKeys('space')
      startVal [time (s)] = 0.0
      letterHeight = 0.025
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  Routine setimg
    CodeComponent setimgcode
      Begin Routine:
        if (xpos == -.25 and corrResp == 1) or (xpos == .25 and corrResp == 0):
            stimimg=congr
        elif (xpos == -.25 and corrResp == 0) or (xpos == .25 and corrResp == 1):
            stimimg=incongr
  Routine Feedback
    TextComponent feedbacktext
      color = black
      text [set every repeat] = $'You got %s correct. %s\n\nPress Space to Continue' % (numcorrect, feedbackmsg)
      stopVal [condition] = event.getKeys('space')
      startVal [time (s)] = 0.0
      letterHeight = 0.025
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  Routine Howwouldyousolve
    TextComponent text_5
      color = black
      text [set every repeat] = $'%s\n\nWrite down what you would do and press space to continue' % problemtext
      stopVal [condition] = event.getKeys('space')
      startVal [time (s)] = 0.0
      letterHeight = .025
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  Routine spatialtrial
    TextComponent Fixation2
      color = black
      text = +
      stopVal [duration (s)] = 1.25
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent stimulus
      stopVal [duration (s)] = .75
      pos [set every repeat] = (xpos,0)
      startVal [time (s)] = .5
      image [set every repeat] = $stimimg
      size = (0.2, 0.2)
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    KeyboardComponent key_resp_2
      correctAns = $corrResp
      storeCorrect = True
      stopVal [duration (s)] = .75
      forceEndRoutine = True
      allowedKeys = '1','0'
      startVal [time (s)] = .5
      store = first key
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    CodeComponent Recordimg
      Begin Routine:
        thisExp.addData('img', stimimg)
  Routine InstrTrial
    TextComponent Fixation
      color = black
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent stim
      pos [set every repeat] = $(xpos, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $stimimg
      size = (0.2, 0.2)
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    TextComponent answerprompt
      color = black
      text [set every repeat] = $'Press %s' % corrResp
      pos = (0, .4)
      startVal [time (s)] = 0.0
      letterHeight = 0.025
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    KeyboardComponent demoinput
      forceEndRoutine = True
      allowedKeys = '1','0'
      startVal [time (s)] = 0.0
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    CodeComponent RecordImage
      Begin Routine:
        thisExp.addData('img', stimimg)
  Routine Practicecounter
    CodeComponent code
      Begin Routine:
        numcorrect+=key_resp_2.corr
  Routine FinanceInstr
    TextComponent text_2
      color = black
      stopVal [condition] = event.getKeys('space')
      startVal [time (s)] = 0.0
      letterHeight = .025
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      text:
        You will see a series of financial problems.

        After you read each problem, you will play the heart and star game while you think of a solution.

        Then you will have a chance to enter your solution.

        Press space to continue.
  Routine breaklooproutine
    CodeComponent breakloop
      Begin Routine:
        if numcorrect >=7:
            Practicing.finished=True
            feedbackmsg=''
        else:
            feedbackmsg='Let\'s try again'
  Routine PractInstr
    TextComponent practiceinstr
      color = black
      stopVal [condition] = event.getKeys('space')
      startVal [time (s)] = 0.0
      letterHeight = 0.025
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      text:
        Let's Practice!

        Press Space to Continue
    CodeComponent code_2
      Begin Routine:
        numcorrect=0
  Routine Instr3
    TextComponent Instr3Text
      color = black
      stopVal [condition] = event.getKeys('space')
      startVal [time (s)] = 0.0
      letterHeight = .025
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      text:
        Here are some examples of correct responses.

        Press Space to continue.
  Routine Instr1
    TextComponent Instr1Text
      color = black
      stopVal [condition] = event.getKeys('space')
      durationEstim = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.025
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      text:
        In this experiment, you will think about financial problems while completing a simple task.

        You will complete the task by pressing the "0" or "1" keys.

        The key you press will depend on what image is shown.

        (press space to continue)
    CodeComponent initcode
      Begin Experiment:
        if expInfo['stimorder'] == '1':
            congr="TessImages/1.jpg" #Heart
            congr_txt="heart"
            incongr="TessImages/2.jpg"#Star
            incongr_txt="star"
        elif expInfo['stimorder'] == '2':
            congr="TessImages/2.jpg" #Star
            congr_txt="star"
            incongr="TessImages/1.jpg"#Heart
            incongr_txt="heart"
        else:
            msg="Inputs do not make sense"
            core.quit()
  Routine setproblem
    CodeComponent code_3
      Begin Experiment:
        import sys
        if expInfo['manigroup'] is not 'H' and expInfo['manigroup'] is not 'L':
            print 'Bad manigroup entered must be H or L'
            core.quit
      Begin Routine:
        if expInfo['manigroup'] == 'H':
            problemtext=ProblemHigh
        if expInfo['manigroup'] == 'L':
            problemtext=ProblemLow
  Routine Instr4
    TextComponent text
      color = black
      text = $'When the image of a %s is shown you will press the key that is on the OPPOSITE side of the screen that the %s is shown on. \n\nFor example, a correct response would be pressing the "1" key when the %s is on the right side of the screen\n\nPress space to continue.' % (incongr_txt,incongr_txt,incongr_txt)
      stopVal [condition] = event.getKeys('space')
      startVal [time (s)] = 0.0
      letterHeight = .025
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  Routine Instr2
    TextComponent Instr2Text
      color = black
      text [set every repeat] = $'When the image of a %s is shown you will press the key that is on the SAME side of the screen that the %s is shown on. \n\nFor example, a correct response would be pressing the "1" key when the %s is on the left side of the screen\n\nPress space to continue.' % (congr_txt,congr_txt,congr_txt)
      stopVal [condition] = event.getKeys('space')
      startVal [time (s)] = 0.0
      letterHeight = 0.025
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  Routine getready
    TextComponent text_3
      color = black
      text = Get Ready!
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.025
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Flow
  Routine Instr1
  Routine Instr2
  Routine Instr3
  LoopInitiator demo1trials loopType="TrialHandler"
    conditionsFile = demo.xls
    loopType = sequential
    nReps = 1
    Selected rows = 0,1
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    conditions:
      [{'corrResp': 1, 'xpos': -0.25},
      {'corrResp': 0, 'xpos': 0.25},
      {'corrResp': 0, 'xpos': -0.25},
      {'corrResp': 1, 'xpos': 0.25}]
    Routine setimg
    Routine InstrTrial
  LoopTerminator demo1trials
  Routine Instr4
  Routine Instr3
  LoopInitiator demo2trials loopType="TrialHandler"
    conditionsFile = demo.xls
    loopType = sequential
    nReps = 1
    Selected rows = 2,3
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    conditions:
      [{'corrResp': 1, 'xpos': -0.25},
      {'corrResp': 0, 'xpos': 0.25},
      {'corrResp': 0, 'xpos': -0.25},
      {'corrResp': 1, 'xpos': 0.25}]
    Routine setimg
    Routine InstrTrial
  LoopTerminator demo2trials
  LoopInitiator Practicing loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine PractInstr
    LoopInitiator PracticeTrials loopType="TrialHandler"
      conditionsFile = demo.xls
      loopType = random
      nReps = 1
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      conditions:
        [{'corrResp': 1, 'xpos': -0.25},
        {'corrResp': 0, 'xpos': 0.25},
        {'corrResp': 0, 'xpos': -0.25},
        {'corrResp': 1, 'xpos': 0.25}]
      Routine setimg
      Routine spatialtrial
      Routine Practicecounter
    LoopTerminator PracticeTrials
    Routine breaklooproutine
    Routine Feedback
  LoopTerminator Practicing
  Routine FinanceInstr
  LoopInitiator FinanceProblems loopType="TrialHandler"
    conditionsFile = Problems.xls
    loopType = random
    nReps = 1
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    conditions:
      [{'ProblemHigh': u'Imagine that you accidentally drop a classmate\u2019s iPhone and shatter the screen. After they take the phone into the Apple Store they tell you the cost to replace the phone will be $599. Are there ways in which you would be able to come up with the money on a very short notice?  How would you go about doing this? Would you have to go to a third-party to come up with the money? What consequences would this financial burden have on you?', 'ProblemLow': u'Imagine that you accidentally drop a classmate\u2019s iPhone and shatter the screen. After they take the phone into the A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,
      {'ProblemHigh': u'Imagine you\u2019re doing homework with friends after school. One of your friends is using their laptop and as you reach for your notebook you accidentally knock over a glass of water which spills all over their laptop. This results in water damage to the laptop and they ask you to cover the repair fee of $800. Would you have the money necessary to cover the damage? How would you get the money? Would you able to cover the damage fees for your friend immediately or would you have to pay them back over a period of time?', 'ProblemLow': u'Imagine you\u2019re doing homework with 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,
      {'ProblemHigh': u'You have joined in a club at your high school and at the end of the school year the entire club, including your friends, will be participating in a weekend trip. The cost for the trip is $1,350. You really want to go on this field trip, how would you personally choose to fund it? Could you pay the amount in full, or pay in monthly club fees? Or would you need to skip it? Would this decision be difficult for you to make? What factors will impact how you make this decision?', 'ProblemLow': u'You have joined in a club at your high school and at the end of the school year the ent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
    Routine setproblem
    Routine FinanceProblem
    Routine getready
    LoopInitiator SpatialLoop loopType="TrialHandler"
      conditionsFile = demo.xls
      loopType = random
      nReps = 1
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      conditions:
        [{'corrResp': 1, 'xpos': -0.25},
        {'corrResp': 0, 'xpos': 0.25},
        {'corrResp': 0, 'xpos': -0.25},
        {'corrResp': 1, 'xpos': 0.25},
        {'corrResp': 1, 'xpos': -0.25},
        {'corrResp': 0, 'xpos': 0.25},
        {'corrResp': 0, 'xpos': -0.25},
        {'corrResp': 1, 'xpos': 0.25}]
      Routine setimg
      Routine spatialtrial
    LoopTerminator SpatialLoop
    Routine Howwouldyousolve
  LoopTerminator FinanceProblems
